PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 720]
  color = -1.0000, -1.0000, -1.0000
  expName = Word-Color Stroop, easy and hard_onesheet
  keyboardBackend = ioHub
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Routines
  Routine Intro__Easy
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For the following, two words will appear. Press either the Left Arrow or Right Arrow to indicate which word matches its font color. Press space to proceed to the practice.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1, channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
  Routine Intro_Hard
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For the following, a word will appear in the middle and a set of three words will appear above it. Press the Left Arrow, Up Arrow, or Right Arrow to indicate which word of the top row (left, middle, and right, respectively) describes the font color of the word below. Press space to proceed to the practice.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Easy1
    TextComponent easy_left
      color [set every repeat] = red
      letterHeight = 0.05
      pos = (-.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Red
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    TextComponent easy_right
      color = green
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      text = Blue
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'left'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Practice_Easy2
    TextComponent text_3
      color = yellow
      letterHeight = 0.05
      pos = (-.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Red
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    TextComponent text_4
      color = blue
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Blue
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    KeyboardComponent key_resp_4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AnsEasy1
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You should have pressed the LEFT Arrow key to indicate the left option was congruent. The word "Red" was in red font color.

        Press Space to practice again.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AnsEasy2
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You should have pressed the RIGHT Arrow key to indicate the right option was congruent. The word "Blue" was in blue font color.

        Press space to see the next set of instructions.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Hard1
    TextComponent text_7
      letterHeight = 0.05
      pos = (-.5, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Red
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    TextComponent text_8
      color = green
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Blue
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    TextComponent text_9
      color = yellow
      letterHeight = 0.05
      pos = (.5, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Green
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    TextComponent text_10
      color = red
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Yellow
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    KeyboardComponent key_resp_7
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AnsHard1
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You should have pressed the LEFT Arrow key to indicate the left option ("Red", in white font) described the font color below ("Yellow" in red font).

        Press Space to practice again.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AnsHard2
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You should have pressed the UP Arrow key to indicate the middle option ("Blue", in green font) described the font color below ("White" in blue font).

        The following task will be ~12 minutes. Each problem will appear for 3seconds before moving to the next. When + appears, simply focus your gaze on it and rest. Please remain as still as possible.

        Wait for the Experimentor; they will press Space to begin the task.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Hard2
    TextComponent text_13
      letterHeight = 0.05
      pos = (-.5, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Red
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    TextComponent text_14
      color = green
      letterHeight = 0.05
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Blue
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    TextComponent text_15
      color = yellow
      letterHeight = 0.05
      pos = (0.5, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Green
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    TextComponent text_16
      color = blue
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = White
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    KeyboardComponent key_resp_10
      allowedKeys = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Done
    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You have finished the task! Please remain still until the experimenter gives indication.
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jitteredrest
    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitteredrest
      text [set every repeat] = +
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  Routine initrest
    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = +
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  Routine WordStroop
    TextComponent hardleft
      color [set every repeat] = $hardleftcolor
      letterHeight = 0.05
      pos = (-.5, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $hardlefttext
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    TextComponent hardup
      color [set every repeat] = $hardupcolor
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $harduptext
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    TextComponent hardright
      color [set every repeat] = $hardrightcolor
      letterHeight = 0.05
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $hardrighttext
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    TextComponent hardmiddle
      color [set every repeat] = $hardmiddlecolor
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $hardmiddletext
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    TextComponent easyleft
      color [set every repeat] = $easyleftcolor
      letterHeight = 0.05
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $easylefttext
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    TextComponent easyright
      color [set every repeat] = $easyrightcolor
      letterHeight = 0.05
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $easyrighttext
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    KeyboardComponent key_resp_12
      allowedKeys = 'left','up','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine waitfornext
    CodeComponent code
      Code Type = Auto->JS
    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimdur
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  Routine sendTrigger
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[marker])
Flow
  Routine Intro__Easy
  Routine Practice_Easy1
  Routine AnsEasy1
  Routine Practice_Easy2
  Routine AnsEasy2
  Routine Intro_Hard
  Routine Practice_Hard1
  Routine AnsHard1
  Routine Practice_Hard2
  Routine AnsHard2
  Routine initrest
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:9
    conditionsFile = rows.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'rows': '0:6', 'jitteredrest': 13, 'marker': 1},
      {'rows': '6:12', 'jitteredrest': 13, 'marker': 1},
      {'rows': '12:18', 'jitteredrest': 10, 'marker': 1},
      {'rows': '18:24', 'jitteredrest': 15, 'marker': 1},
      {'rows': '24:30', 'jitteredrest': 14, 'marker': 2},
      {'rows': '30:36', 'jitteredrest': 15, 'marker': 2},
      {'rows': '36:42', 'jitteredrest': 14, 'marker': 2},
      {'rows': '42:48', 'jitteredrest': 13, 'marker': 2},
      {'rows': '48:54', 'jitteredrest': 12, 'marker': 2},
      {'rows': '54:60', 'jitteredrest': 10, 'marker': 1},
      {'rows': '60:66', 'jitteredrest': 14, 'marker': 1},
      {'rows': '66:72', 'jitteredrest': 10, 'marker': 1},
      {'rows': '72:78', 'jitteredrest': 15, 'marker': 1},
      {'rows': '78:84', 'jitteredrest': 13, 'marker': 1},
      {'rows': '84:90', 'jitteredrest': 13, 'marker': 2},
      {'rows': '90:96', 'jitteredrest': 14, 'marker': 2},
      {'rows': '96:102', 'jitteredrest': 14, 'marker': 2},
      {'rows': '102:108', 'jitteredrest': 15, 'marker': 2}]
    Routine sendTrigger
    LoopInitiator trials_1 loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = words.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'easylefttext': 'green', 'easyleftcolor': 'green', 'easyrighttext': 'yellow', 'easyrightcolor': 'white', 'hardlefttext': 'none', 'hardleftcolor': 'none', 'harduptext': 'none', 'hardupcolor': 'none', 'hardrighttext': 'none', 'hardrightcolor': 'none', 'hardmiddletext': 'none', 'hardmiddlecolor': 'none', 'corrAns': 'left'},
        {'easylefttext': 'green', 'easyleftcolor': 'white', 'easyrighttext': 'red', 'easyrightcolor': 'red', 'hardlefttext': 'none', 'hardleftcolor': 'none', 'harduptext': 'none', 'hardupcolor': 'none', 'hardrighttext': 'none', 'hardrightcolor': 'none', 'hardmiddletext': 'none', 'hardmiddlecolor': 'none', 'corrAns': 'right'},
        {'easylefttext': 'yellow', 'easyleftcolor': 'blue', 'easyrighttext': 'green', 'easyrightcolor': 'green', 'hardlefttext': 'none', 'hardleftcolor': 'none', 'harduptext': 'none', 'hardupcolor': 'none', 'hardrighttext': 'none', 'hardrightcolor': 'none', 'hardmiddletext': 'none', 'hardmiddlecolor': 'none', 'corrAns': 'right'},
        {'easylefttext': 'white', 'easyleftcolor': 'white', 'easyrighttext': 'yellow', 'easyrightcolor': 'blue', 'hardlefttext': 'none', 'hardleftcolor': 'none', 'harduptext': 'none', 'hardupcolor': 'none', 'hardrighttext': 'none', 'hardrightcolor': 'none', 'hardmiddletext': 'none', 'hardmiddlecolor': 'none', 'corrAns': 'left'}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
      Routine WordStroop
    LoopTerminator trials_1
    Routine jitteredrest
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 9:18
    conditionsFile = rows.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'rows': '0:6', 'jitteredrest': 13, 'marker': 1},
      {'rows': '6:12', 'jitteredrest': 13, 'marker': 1},
      {'rows': '12:18', 'jitteredrest': 10, 'marker': 1},
      {'rows': '18:24', 'jitteredrest': 15, 'marker': 1},
      {'rows': '24:30', 'jitteredrest': 14, 'marker': 2},
      {'rows': '30:36', 'jitteredrest': 15, 'marker': 2},
      {'rows': '36:42', 'jitteredrest': 14, 'marker': 2},
      {'rows': '42:48', 'jitteredrest': 13, 'marker': 2},
      {'rows': '48:54', 'jitteredrest': 12, 'marker': 2},
      {'rows': '54:60', 'jitteredrest': 10, 'marker': 1},
      {'rows': '60:66', 'jitteredrest': 14, 'marker': 1},
      {'rows': '66:72', 'jitteredrest': 10, 'marker': 1},
      {'rows': '72:78', 'jitteredrest': 15, 'marker': 1},
      {'rows': '78:84', 'jitteredrest': 13, 'marker': 1},
      {'rows': '84:90', 'jitteredrest': 13, 'marker': 2},
      {'rows': '90:96', 'jitteredrest': 14, 'marker': 2},
      {'rows': '96:102', 'jitteredrest': 14, 'marker': 2},
      {'rows': '102:108', 'jitteredrest': 15, 'marker': 2}]
    Routine sendTrigger
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = words.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'easylefttext': 'green', 'easyleftcolor': 'green', 'easyrighttext': 'yellow', 'easyrightcolor': 'white', 'hardlefttext': 'none', 'hardleftcolor': 'none', 'harduptext': 'none', 'hardupcolor': 'none', 'hardrighttext': 'none', 'hardrightcolor': 'none', 'hardmiddletext': 'none', 'hardmiddlecolor': 'none', 'corrAns': 'left'},
        {'easylefttext': 'green', 'easyleftcolor': 'white', 'easyrighttext': 'red', 'easyrightcolor': 'red', 'hardlefttext': 'none', 'hardleftcolor': 'none', 'harduptext': 'none', 'hardupcolor': 'none', 'hardrighttext': 'none', 'hardrightcolor': 'none', 'hardmiddletext': 'none', 'hardmiddlecolor': 'none', 'corrAns': 'right'},
        {'easylefttext': 'yellow', 'easyleftcolor': 'blue', 'easyrighttext': 'green', 'easyrightcolor': 'green', 'hardlefttext': 'none', 'hardleftcolor': 'none', 'harduptext': 'none', 'hardupcolor': 'none', 'hardrighttext': 'none', 'hardrightcolor': 'none', 'hardmiddletext': 'none', 'hardmiddlecolor': 'none', 'corrAns': 'right'},
        {'easylefttext': 'white', 'easyleftcolor': 'white', 'easyrighttext': 'yellow', 'easyrightcolor': 'blue', 'hardlefttext': 'none', 'hardleftcolor': 'none', 'harduptext': 'none', 'hardupcolor': 'none', 'hardrighttext': 'none', 'hardrightcolor': 'none', 'hardmiddletext': 'none', 'hardmiddlecolor': 'none', 'corrAns': 'left'}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
      Routine WordStroop
    LoopTerminator trials_2
    Routine jitteredrest
  LoopTerminator trials_3
  Routine Done
